WorkflowBuilder(Version=2.9.1)
ExternalizedMapping
  LedBrightness
  Focus
  SensorGain
  LedRespectsDigitalIn
  FrameRate
  FileName
  BufferSize
  Suffix
  CameraIndex
  CompressVideo
  RecordingDuration
  StopWorkflowOnClose
-> GroupWorkflow "Initialize Subjects"
    BooleanProperty(Value=false)
    -> BehaviorSubject RecordButton

    BooleanProperty(Value=false)
    -> BehaviorSubject TriggerMode

    ExternalizedMapping(Value(DisplayName=CompressVideo, Category=Recording))
    -> BooleanProperty(Value=false)
    -> BehaviorSubject CompressVideo

    ExternalizedMapping(Value(DisplayName=Suffix, Category=Saving))
    -> PropertySource<Bonsai.Vision.VideoWriter,Bonsai.IO.PathSuffix>(MemberName=Suffix, Value=FileCount)
    -> BehaviorSubject PathSuffix

    ExternalizedMapping(Value(DisplayName=FileName, Category=Saving))
    -> PropertySource<Bonsai.Vision.VideoWriter,System.String>(MemberName=FileName, Value="")
    -> BehaviorSubject FileName

    ExternalizedMapping(Value(DisplayName=RecordingDuration, Category=Recording))
    -> IntProperty(Value=600)
    -> BehaviorSubject RecordingDuration

    BooleanProperty(Value=false)
    -> BehaviorSubject UseRecordDuration

    BooleanProperty(Value=false)
    -> BehaviorSubject RecordingStatus

    IntProperty(Value=100)
    -> BehaviorSubject BackgroundFrames

    DoubleProperty(Value=14.3)
    -> BehaviorSubject BackgroundThreshold

    IntProperty(Value=3)
    -> BehaviorSubject Sigma

    IntProperty(Value=192)
    -> BehaviorSubject SaturationThreshold

    PropertySource<Bonsai.Vision.SolidColor,OpenCV.Net.Scalar>(MemberName=Color, Value(Val0=0, Val1=0, Val2=100, Val3=100))
    -> BehaviorSubject SaturationColor

    BooleanProperty(Value=false)
    -> BehaviorSubject CommutatorConnected

    StringProperty(Value="")
    -> BehaviorSubject PortName

    BooleanProperty(Value=true)
    -> BehaviorSubject CommutatorEnable

    BooleanProperty(Value=true)
    -> BehaviorSubject CommutatorEnableLed

    StringProperty
    -> BehaviorSubject CommutatorStatus

    BooleanProperty(Value=true)
    -> BehaviorSubject CommutatorAutoConnect

    ExternalizedMapping(Value(DisplayName=CameraIndex, Category=Acquisition))
    -> IntProperty(Value=0)
    -> BehaviorSubject CameraIndex

    BooleanProperty(Value=false)
    -> BehaviorSubject Pause

    ExternalizedMapping(Value(DisplayName=LedRespectsDigitalIn, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(MemberName=LedRespectsDigitalIn, Value=None)
    -> BehaviorSubject LedRespectsDigitalIn

    ExternalizedMapping(Value(DisplayName=FrameRate, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,OpenEphys.Miniscope.FrameRateV4>(MemberName=FramesPerSecond, Value=Fps30)
    -> BehaviorSubject FrameRate

    ExternalizedMapping(Value(DisplayName=SensorGain, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,OpenEphys.Miniscope.GainV4>(MemberName=SensorGain, Value=Low)
    -> BehaviorSubject SensorGain

    ExternalizedMapping(Value(DisplayName=Focus, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,System.Double>(MemberName=Focus, Value=0)
    -> BehaviorSubject Focus

    ExternalizedMapping(Value(DisplayName=LedBrightness, Category=Acquisition))
    -> PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,System.Double>(MemberName=LedBrightness, Value=0)
    -> BehaviorSubject LedBrightness

    BooleanProperty(Value=false)
    -> BehaviorSubject MiniscopeConnected

    StringProperty
    -> BehaviorSubject MiniscopeStatus

    StringProperty
    -> BehaviorSubject RecordingError

    ExternalizedMapping(Value(DisplayName=BufferSize, Category=Display))
    -> IntProperty(Value=100)
    -> BehaviorSubject BufferSize

    IntProperty(Value=0)
    -> BehaviorSubject DroppedFrames

    PropertySource<OpenEphys.Miniscope.UclaMiniscopeV4,OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(MemberName=LedRespectsDigitalIn, Value=DigitalIn0)
    -> BehaviorSubject TriggerInput

    BooleanProperty(Value=false)
    -> BehaviorSubject AutomaticRestart

    ExternalizedMapping(Value(DisplayName=StopWorkflowOnClose, Category=Workflow))
    -> BooleanProperty(Value=false)
    -> BehaviorSubject StopWorkflowOnClose

    PropertySource<OpenEphys.MiniscopeV4.Gui.DataPanel,OpenEphys.MiniscopeV4.Gui.ImageTab>(MemberName=ImageTab, Value=Raw)
    -> BehaviorSubject ImageTab

    BooleanProperty(Value=false)
    -> OpenEphys.MiniscopeV4.Gui.CreateMaxProjectionSettings
    -> BehaviorSubject MaxProjectionSettings

    BooleanProperty(Value=false) => #85
    BooleanProperty(Value=false) => #86
    StringProperty => #87
    #85, #86, #87 -> OpenEphys.MiniscopeV4.Gui.CreateOverlaySettings
    -> BehaviorSubject OverlaySettings

    OpenEphys.MiniscopeV4.Gui.CreateGuiLayout
    -> BehaviorSubject GuiLayout

    OpenEphys.MiniscopeV4.Gui.CreateMiniscopeLog
    -> BehaviorSubject MiniscopeLog

GroupWorkflow "Data Acquisition" => #2
    SubscribeSubject MiniscopeConnected
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1) => #2
    SubscribeSubject CameraIndex
    -> PropertyMapping(Index) => #4
    #2, #4 -> SelectMany
        WorkflowInput Source1
        -> StringProperty(Value="Starting acquisition.") => #1
        SubscribeSubject MiniscopeLog => #2
        #1, #2 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogInfo

        ExternalizedMapping(Index) => #5
        SubscribeSubject LedBrightness
        -> PropertyMapping(LedBrightness) => #7
        SubscribeSubject Focus
        -> PropertyMapping(Focus) => #9
        SubscribeSubject SensorGain
        -> PropertyMapping(SensorGain) => #11
        SubscribeSubject FrameRate
        -> PropertyMapping(FramesPerSecond) => #13
        SubscribeSubject LedRespectsDigitalIn
        -> PropertyMapping(LedRespectsDigitalIn) => #15
        #5, #7, #9, #11, #13, #15 -> OpenEphys.Miniscope.UclaMiniscopeV4(Index=1, LedBrightness=0, Focus=0, SensorGain=Low, FramesPerSecond=Fps30, LedRespectsDigitalIn=None) => #16
        SubscribeSubject MiniscopeConnected
        -> Condition => #18
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #16, #18 -> TakeUntil
        -> Materialize => #20
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception == null
        -> Dematerialize
        -> Catch => #23
        -> WorkflowOutput
        #23 -> GroupWorkflow "Log Stop Acquisition"
            WorkflowInput Source1
            -> Materialize
            -> Bonsai.Scripting.Expressions.ExpressionCondition
              Expression: !it.HasValue && it.Exception == null
            -> StringProperty(Value="Stopping acquisition.") => #3
            SubscribeSubject MiniscopeLog => #4
            #3, #4 -> WithLatestFrom
            -> OpenEphys.MiniscopeV4.Gui.LogInfo
            -> WorkflowOutput
        #23 -> GroupWorkflow "Calculate Dropped Frames"
            WorkflowInput Source1
            -> MemberSelector(Selector=FrameNumber) => #1
            -> Skip(Count=1) => #2
            #1, #2 -> Zip
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item2 - it.Item1 - 1
            -> Accumulate
            -> DistinctUntilChanged
            -> MulticastSubject DroppedFrames
            -> WorkflowOutput
        #20 -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject MiniscopeStatus
    -> Repeat
    -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
    -> BehaviorSubject Frame
    -> GroupWorkflow "Calculate Average Frame Rate"
        WorkflowInput Source1
        -> MemberSelector(Selector=HardwareTime)
        -> BufferTime(TimeSpan=PT2S, TimeShift=PT0.1S) => #2
        SubscribeSubject MiniscopeConnected => #3
        #2, #3 -> CombineLatest
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: (it.Item1.Count > 1) && it.Item2 ? (it.Item1.Count - 1 )* 1e3 / (it.Item1[it.Item1.Count - 1] - it.Item1[0]) : 0.0
        -> PublishSubject AverageFrameRate
        -> WorkflowOutput

    SubscribeSubject MiniscopeStatus
    -> Bonsai.Scripting.Expressions.ExpressionCondition
      Expression: !string.IsNullOrEmpty(it)
    -> BooleanProperty(Value=false)
    -> MulticastSubject MiniscopeConnected

    SubscribeSubject MiniscopeConnected
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> IntProperty(Value=0)
    -> MulticastSubject DroppedFrames

    SubscribeSubject Frame
    -> MemberSelector(Selector=FrameNumber) => #19
    SubscribeSubject MiniscopeLog => #20
    #19, #20 -> WithLatestFrom
    -> OpenEphys.MiniscopeV4.Gui.UpdateLogFrameNumber
OpenEphys.MiniscopeV4.Gui.MiniscopeVisualizerClosed
-> Condition StopOnWorkflowClose => #4
    SubscribeSubject StopWorkflowOnClose
    -> WorkflowOutput
#2, #4 -> TakeUntil
-> WorkflowOutput

GroupWorkflow "Display UI"
    OpenEphys.MiniscopeV4.Gui.ImGuiMiniscopeVisualizerBuilder => #0
    -> PublishSubject ImageTick
    -> Condition "Not Paused"
        SubscribeSubject Pause
        -> BitwiseNot
        -> WorkflowOutput
    -> PublishSubject DisplayTick
    #0 -> Bonsai.Design.VisualizerWindow(Text="UCLA MiniscopeV4 GUI", Visible=true, Location(X=400, Y=100), Size(Width=1100, Height=900), WindowState=Normal)

    SubscribeSubject ImageTick
    -> GroupWorkflow StatusBar
        WorkflowInput Source1 => #0
        SubscribeSubject GuiLayout => #1
        #0, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #3
        GroupWorkflow Status => #4
            SubscribeSubject CameraIndex
            -> ObserveOn(Scheduler=DefaultScheduler) => #1
            SubscribeSubject MiniscopeConnected
            -> ObserveOn(Scheduler=DefaultScheduler) => #3
            SubscribeSubject Pause => #4
            #1, #3, #4 -> OpenEphys.MiniscopeV4.Gui.CreateCameraStatus
            -> WorkflowOutput
        #3, #4 -> WithLatestFrom => #5
        SubscribeSubject RecordingStatus
        -> PropertyMapping(RecordingStatus) => #7
        SubscribeSubject AutoRestartTriggered
        -> PropertyMapping(AutomaticRestartTriggered) => #9
        #5, #7, #9 -> OpenEphys.MiniscopeV4.Gui.StatusBar => #10
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #10 -> MemberSelector(Selector=Item2)
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl => #14
        -> MemberSelector(Selector=CameraIndex)
        -> DistinctUntilChanged
        -> MulticastSubject CameraIndex
        #14 -> MemberSelector(Selector=IsConnected)
        -> DistinctUntilChanged
        -> MulticastSubject MiniscopeConnected
        #14 -> MemberSelector(Selector=Paused)
        -> DistinctUntilChanged
        -> MulticastSubject Pause
    -> GroupWorkflow "Plot Settings"
        WorkflowInput Source1 => #0
        GroupWorkflow Miniscope => #1
            SubscribeSubject LedBrightness => #0
            SubscribeSubject Focus => #1
            SubscribeSubject SensorGain => #2
            SubscribeSubject FrameRate => #3
            SubscribeSubject LedRespectsDigitalIn => #4
            #0, #1, #2, #3, #4 -> OpenEphys.MiniscopeV4.Gui.CreateMiniscopeSettings
            -> WorkflowOutput
        GroupWorkflow Commutator => #2
            SubscribeSubject PortName => #0
            SubscribeSubject CommutatorConnected => #1
            SubscribeSubject CommutatorEnable => #2
            SubscribeSubject CommutatorEnableLed => #3
            SubscribeSubject CommutatorAutoConnect => #4
            #0, #1, #2, #3, #4 -> OpenEphys.MiniscopeV4.Gui.CreateCommutatorSettings
            -> WorkflowOutput
        #1, #2 -> OpenEphys.MiniscopeV4.Gui.CreateHardwareSettings => #3
        #0, #3 -> WithLatestFrom => #4
        SubscribeSubject MiniscopeLog => #5
        SubscribeSubject MiniscopeConnected
        -> PropertyMapping(AcquisitionStatus) => #7
        #4, #5, #7 -> OpenEphys.MiniscopeV4.Gui.SettingsPanel(AcquisitionStatus=false) => #8
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #8 -> MemberSelector(Selector=Item2)
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl => #12
        -> GroupWorkflow Miniscope
            WorkflowInput Source1
            -> MemberSelector(Selector=Miniscope) => #1
            -> MemberSelector(Selector=LedBrightness)
            -> DistinctUntilChanged
            -> MulticastSubject LedBrightness
            #1 -> MemberSelector(Selector=Focus)
            -> DistinctUntilChanged
            -> MulticastSubject Focus
            #1 -> MemberSelector(Selector=SensorGain)
            -> DistinctUntilChanged
            -> MulticastSubject SensorGain
            #1 -> MemberSelector(Selector=FrameRate)
            -> DistinctUntilChanged
            -> MulticastSubject FrameRate
            #1 -> MemberSelector(Selector=LedRespectsDigitalIn)
            -> DistinctUntilChanged
            -> MulticastSubject LedRespectsDigitalIn
        #12 -> GroupWorkflow Commutator
            WorkflowInput Source1
            -> MemberSelector(Selector=Commutator) => #1
            -> MemberSelector(Selector=PortName)
            -> DistinctUntilChanged
            -> MulticastSubject PortName
            #1 -> MemberSelector(Selector=IsConnected)
            -> DistinctUntilChanged
            -> MulticastSubject CommutatorConnected
            #1 -> MemberSelector(Selector=Enable)
            -> DistinctUntilChanged
            -> MulticastSubject CommutatorEnable
            #1 -> MemberSelector(Selector=EnableLed)
            -> DistinctUntilChanged
            -> MulticastSubject CommutatorEnableLed
            #1 -> MemberSelector(Selector=AutoConnect)
            -> DistinctUntilChanged
            -> MulticastSubject CommutatorAutoConnect

        GroupWorkflow "Log Commutator Status"
            SubscribeSubject CommutatorConnected
            -> DistinctUntilChanged
            -> Skip(Count=1)
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #3
              Expression: it ? "Commutator connected" : "Commutator disconnected"
            SubscribeSubject MiniscopeLog => #4
            #3, #4 -> WithLatestFrom
            -> OpenEphys.MiniscopeV4.Gui.LogInfo
            -> WorkflowOutput
    -> GroupWorkflow File
        WorkflowInput Source1 => #0
        SubscribeSubject RecordButton => #1
        SubscribeSubject TriggerMode => #2
        SubscribeSubject CompressVideo => #3
        SubscribeSubject FileName => #4
        SubscribeSubject PathSuffix => #5
        SubscribeSubject RecordingDuration => #6
        SubscribeSubject UseRecordDuration => #7
        SubscribeSubject TriggerInput => #8
        SubscribeSubject AutomaticRestart => #9
        #1, #2, #3, #4, #5, #6, #7, #8, #9 -> OpenEphys.MiniscopeV4.Gui.CreateFileSettings => #10
        #0, #10 -> WithLatestFrom => #11
        SubscribeSubject MiniscopeConnected
        -> PropertyMapping(AcquisitionStatus) => #13
        #11, #13 -> OpenEphys.MiniscopeV4.Gui.FilePanel(AcquisitionStatus=false) => #14
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #14 -> MemberSelector(Selector=Item2)
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl => #18
        -> MemberSelector(Selector=RecordButton)
        -> DistinctUntilChanged
        -> MulticastSubject RecordButton
        #18 -> MemberSelector(Selector=TriggerMode)
        -> DistinctUntilChanged
        -> MulticastSubject TriggerMode
        #18 -> MemberSelector(Selector=CompressVideo)
        -> DistinctUntilChanged
        -> MulticastSubject CompressVideo
        #18 -> MemberSelector(Selector=FileName)
        -> DistinctUntilChanged
        -> MulticastSubject FileName
        #18 -> MemberSelector(Selector=Suffix)
        -> DistinctUntilChanged
        -> MulticastSubject PathSuffix
        #18 -> MemberSelector(Selector=RecordingDuration)
        -> DistinctUntilChanged
        -> MulticastSubject RecordingDuration
        #18 -> MemberSelector(Selector=UseRecordDuration)
        -> DistinctUntilChanged
        -> MulticastSubject UseRecordDuration
        #18 -> MemberSelector(Selector=TriggerInput)
        -> DistinctUntilChanged
        -> MulticastSubject TriggerInput
        #18 -> MemberSelector(Selector=AutomaticRestart)
        -> DistinctUntilChanged
        -> MulticastSubject AutomaticRestart
    -> GroupWorkflow "Plot Data"
        WorkflowInput Source1 => #0
        GroupWorkflow Input => #1
            SubscribeSubject BufferSize => #0
            GroupWorkflow Saturation => #1
                SubscribeSubject SaturationThreshold => #0
                SubscribeSubject SaturationColor => #1
                #0, #1 -> OpenEphys.MiniscopeV4.Gui.CreateSaturationSettings
                -> WorkflowOutput
            GroupWorkflow Dff => #2
                SubscribeSubject BackgroundFrames => #0
                SubscribeSubject BackgroundThreshold => #1
                SubscribeSubject Sigma => #2
                #0, #1, #2 -> OpenEphys.MiniscopeV4.Gui.CreateDffSettings
                -> WorkflowOutput
            SubscribeSubject MaxProjectionSettings => #3
            SubscribeSubject OverlaySettings => #4
            #0, #1, #2, #3, #4 -> OpenEphys.MiniscopeV4.Gui.CreateDataDisplaySettings
            -> WorkflowOutput
        #0, #1 -> WithLatestFrom
        -> GroupWorkflow "Render Data Panel" => #3
            WorkflowInput Source1 => #0
            SubscribeSubject Frame
            -> MemberSelector(Selector=Image) => #2
            -> GroupWorkflow RawImage => #3
                BehaviorSubject<OpenCV.Net.IplImage> CachedRawImage

                WorkflowInput Source1 => #1
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick => #2
                GroupWorkflow EmitCachedImage => #3
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject Pause
                        -> WorkflowOutput
                    -> Condition RawTab => #3
                        WorkflowInput Source1
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Raw))
                        -> WorkflowOutput
                    SubscribeSubject CachedRawImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #2, #3 -> Merge
                -> Condition RawTab
                    SubscribeSubject ImageTab
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Raw))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #1 -> GroupWorkflow CacheRawImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedRawImage
                    -> WorkflowOutput
            #2 -> GroupWorkflow DffImage => #4
                BehaviorSubject<OpenCV.Net.IplImage> CachedDffImage

                WorkflowInput Source1
                -> GroupWorkflow "Calculate DeltaFOverF" => #2
                    WorkflowInput Source1 => #0
                    SubscribeSubject BackgroundFrames
                    -> PropertyMapping(BackgroundFrames) => #2
                    SubscribeSubject BackgroundThreshold
                    -> PropertyMapping(BackgroundThreshold) => #4
                    SubscribeSubject Sigma
                    -> PropertyMapping(Sigma) => #6
                    #0, #2, #4, #6 -> OpenEphys.Miniscope.DeltaFOverF(BackgroundFrames=100, BackgroundThreshold=14.3, Sigma=3)
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick => #3
                GroupWorkflow EmitCachedImage => #4
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject Pause
                        -> WorkflowOutput
                    -> Condition DffTab => #3
                        WorkflowInput Source1
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Dff))
                        -> WorkflowOutput
                    SubscribeSubject CachedDffImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #3, #4 -> Merge
                -> Condition DffTab
                    SubscribeSubject ImageTab
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Dff))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #2 -> GroupWorkflow CacheImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedDffImage
                    -> WorkflowOutput
            #2 -> GroupWorkflow SaturationImage => #5
                BehaviorSubject<OpenCV.Net.IplImage> CachedSaturationImage

                WorkflowInput Source1
                -> GroupWorkflow CalculateDisplaySaturation => #2
                    WorkflowInput Source1 => #0
                    SubscribeSubject SaturationThreshold
                    -> PropertyMapping(ThresholdValue) => #2
                    #0, #2 -> Bonsai.Vision.Threshold(ThresholdValue=192, MaxValue=255, ThresholdType=Binary) => #3
                    -> MemberSelector(Selector=Size)
                    -> PropertyMapping(Size) => #5
                    SubscribeSubject SaturationColor
                    -> PropertyMapping(Color) => #7
                    #3, #5, #7 -> Bonsai.Vision.SolidColor(Size(Width=640, Height=480), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=100, Val3=100)) => #8
                    #8, #3 -> Zip
                    -> Bonsai.Vision.Mask(FillValue(Val0=0, Val1=0, Val2=0, Val3=1)) => #10
                    #0, #2 -> Bonsai.Vision.Threshold(ThresholdValue=192, MaxValue=255, ThresholdType=ToZeroInv) => #11
                    #10, #11 -> Zip
                    -> Add
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick => #3
                GroupWorkflow EmitCachedImage => #4
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject Pause
                        -> WorkflowOutput
                    -> Condition SaturationTab => #3
                        WorkflowInput Source1
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Saturation))
                        -> WorkflowOutput
                    SubscribeSubject CachedSaturationImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #3, #4 -> Merge
                -> Condition SaturationTab
                    SubscribeSubject ImageTab
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Saturation))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #2 -> GroupWorkflow CacheSaturationImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedSaturationImage
                    -> WorkflowOutput
            #2 -> GroupWorkflow MaxProjectionImage => #6
                BehaviorSubject<OpenCV.Net.IplImage> CachedMaxProjectionImage

                WorkflowInput Source1
                -> GroupWorkflow MaxProjection => #2
                    WorkflowInput Source1 => #0
                    SubscribeSubject MaxProjectionSettings => #1
                    SubscribeSubject MiniscopeConnected
                    -> Condition Disconnected
                        WorkflowInput Source1
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> BooleanProperty(Value=true)
                    -> OpenEphys.MiniscopeV4.Gui.CreateMaxProjectionSettings => #5
                    #1, #5 -> Merge => #6
                    #0, #6 -> OpenEphys.MiniscopeV4.Gui.CalculateMaxProjection
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick => #3
                GroupWorkflow EmitCachedImage => #4
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject Pause
                        -> WorkflowOutput
                    -> Condition MaxProjectionTab => #3
                        WorkflowInput Source1
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=MaxProjection))
                        -> WorkflowOutput
                    SubscribeSubject CachedMaxProjectionImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #3, #4 -> Merge
                -> Condition MaxProjectionTab
                    SubscribeSubject ImageTab
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=MaxProjection))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #2 -> GroupWorkflow CacheImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedMaxProjectionImage
                    -> WorkflowOutput
            #2 -> GroupWorkflow OverlayImage => #7
                BehaviorSubject<OpenCV.Net.IplImage> CachedOverlayImage

                WorkflowInput Source1
                -> Bonsai.ImGui.Visualizers.SampleOnNewFrame DisplayTick
                -> GroupWorkflow Overlay => #3
                    WorkflowInput Source1 => #0
                    SubscribeSubject OverlaySettings => #1
                    #0, #1 -> WithLatestFrom => #2
                    SubscribeSubject MiniscopeLog => #3
                    #2, #3 -> OpenEphys.MiniscopeV4.Gui.OverlayReference
                    -> WorkflowOutput
                GroupWorkflow EmitCachedImage => #4
                    SubscribeSubject ImageTab
                    -> DistinctUntilChanged
                    -> Condition Paused
                        SubscribeSubject Pause
                        -> WorkflowOutput
                    -> Condition OverlayTab => #3
                        WorkflowInput Source1 => #0
                        SubscribeSubject ImageTab => #1
                        #0, #1 -> WithLatestFrom
                        -> MemberSelector(Selector=Item2)
                        -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Overlay))
                        -> WorkflowOutput
                    SubscribeSubject CachedOverlayImage => #4
                    #3, #4 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> WorkflowOutput
                #3, #4 -> Merge
                -> Condition OverlayTab
                    WorkflowInput Source1 => #0
                    SubscribeSubject ImageTab => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> Equal(Operand=WorkflowProperty<OpenEphys.MiniscopeV4.Gui.ImageTab>(Value=Overlay))
                    -> WorkflowOutput
                -> Bonsai.ImGui.Visualizers.StoreImage(InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
                -> WorkflowOutput
                #3 -> GroupWorkflow CacheImage
                    SubscribeSubject SnapshotTick => #0
                    WorkflowInput Source1 => #1
                    #0, #1 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2)
                    -> MulticastSubject CachedOverlayImage
                    -> WorkflowOutput
            #3, #4, #5, #6, #7 -> Merge
            -> PropertyMapping(ActiveImage) => #9
            #2 -> MemberSelector(Selector=Size)
            -> DistinctUntilChanged => #11
            -> MemberSelector(Selector=Height)
            -> PropertyMapping(ImageHeight) => #13
            #11 -> MemberSelector(Selector=Width)
            -> PropertyMapping(ImageWidth) => #15
            #2 -> Bonsai.Vision.ImageHistogram
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame DisplayTick
            -> PropertyMapping(ImageHistogram) => #18
            SubscribeSubject MiniscopeConnected
            -> Condition => #20
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject BufferSize
            -> PropertyMapping(Capacity) => #22
            #20, #22 -> SelectMany
                SubscribeSubject Frame
                -> Condition "Not Paused"
                    SubscribeSubject Pause
                    -> BitwiseNot
                    -> WorkflowOutput
                -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
                -> MemberSelector(Selector=Quaternion) => #3
                ExternalizedMapping(Capacity) => #4
                #3, #4 -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=100, IndexSelector="", ValueSelector="X,Y,Z,W") => #5
                SubscribeSubject MiniscopeConnected
                -> Condition => #7
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                #5, #7 -> TakeUntil
                -> WorkflowOutput
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame DisplayTick
            -> PropertyMapping(QuaternionSeries) => #25
            #22, #20 -> SelectMany
                SubscribeSubject Frame
                -> Condition "Not Paused"
                    SubscribeSubject Pause
                    -> BitwiseNot
                    -> WorkflowOutput
                -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
                -> MemberSelector(Selector=DigitalIn) => #3
                -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0)) => #4
                #3 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn1)) => #5
                #4, #5 -> Zip => #6
                ExternalizedMapping(Capacity) => #7
                #6, #7 -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=100, IndexSelector="", ValueSelector="Item1,Item2") => #8
                SubscribeSubject MiniscopeConnected
                -> Condition => #10
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                #8, #10 -> TakeUntil
                -> WorkflowOutput
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame DisplayTick
            -> PropertyMapping(DigitalInSeries) => #28
            #20, #22 -> SelectMany
                SubscribeSubject Frame
                -> Condition "Not Paused"
                    SubscribeSubject Pause
                    -> BitwiseNot
                    -> WorkflowOutput
                -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
                -> MemberSelector(Selector=Quaternion)
                -> OpenEphys.Miniscope.QuaternionToEuler => #4
                ExternalizedMapping(Capacity) => #5
                #4, #5 -> Bonsai.ImGui.Visualizers.RollingBufferBuilder(Capacity=100, IndexSelector="", ValueSelector="Yaw,Pitch,Roll") => #6
                SubscribeSubject MiniscopeConnected
                -> Condition => #8
                    WorkflowInput Source1
                    -> BitwiseNot
                    -> WorkflowOutput
                #6, #8 -> TakeUntil
                -> WorkflowOutput
            -> Bonsai.ImGui.Visualizers.LatestOnNewFrame DisplayTick
            -> PropertyMapping(EulerAnglesSeries) => #31
            SubscribeSubject MiniscopeConnected
            -> PropertyMapping(AcquisitionStatus) => #33
            SubscribeSubject AverageFrameRate
            -> PropertyMapping(AverageFrameRate) => #35
            SubscribeSubject Frame
            -> MemberSelector(Selector=FrameNumber)
            -> PropertyMapping(FrameNumber) => #38
            SubscribeSubject DroppedFrames
            -> PropertyMapping(DroppedFrames) => #40
            SubscribeSubject FileName
            -> PropertyMapping(DataPath) => #42
            #0, #9, #13, #15, #18, #25, #28, #31, #33, #35, #38, #40, #42 -> OpenEphys.MiniscopeV4.Gui.DataPanel(ImageHeight=480, ImageWidth=640)
            -> WorkflowOutput

            SubscribeSubject Pause
            -> DistinctUntilChanged
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> PublishSubject SnapshotTick
        -> MemberSelector(Selector=Item1)
        -> WorkflowOutput
        #3 -> GroupWorkflow Output
            WorkflowInput Source1 => #0
            -> MemberSelector(Selector=Item2)
            -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl => #2
            -> MemberSelector(Selector=BufferSize)
            -> DistinctUntilChanged
            -> MulticastSubject BufferSize
            #2 -> GroupWorkflow Saturation
                WorkflowInput Source1
                -> MemberSelector(Selector=Saturation) => #1
                -> MemberSelector(Selector=Threshold)
                -> DistinctUntilChanged
                -> MulticastSubject SaturationThreshold
                #1 -> MemberSelector(Selector=Color)
                -> DistinctUntilChanged
                -> MulticastSubject SaturationColor
            #2 -> GroupWorkflow Dff
                WorkflowInput Source1
                -> MemberSelector(Selector=Dff) => #1
                -> MemberSelector(Selector=BackgroundFrames)
                -> DistinctUntilChanged
                -> MulticastSubject BackgroundFrames
                #1 -> MemberSelector(Selector=BackgroundThreshold)
                -> DistinctUntilChanged
                -> MulticastSubject BackgroundThreshold
                #1 -> MemberSelector(Selector=Sigma)
                -> DistinctUntilChanged
                -> MulticastSubject Sigma
            #2 -> MemberSelector(Selector=MaxProjection)
            -> DistinctUntilChanged
            -> MulticastSubject MaxProjectionSettings
            #0 -> MemberSelector(Selector=Item2.Overlay)
            -> DistinctUntilChanged
            -> MulticastSubject OverlaySettings
            #0 -> MemberSelector(Selector=Item3)
            -> DistinctUntilChanged
            -> MulticastSubject ImageTab

        GroupWorkflow "Save Screenshot"
            SubscribeSubject OverlaySettings
            -> Condition MiniscopeConnected
                SubscribeSubject MiniscopeConnected
                -> WorkflowOutput
            -> MemberSelector(Selector=Capture)
            -> Condition CaptureRequested => #3
                WorkflowInput Source1
                -> WorkflowOutput
            SubscribeSubject Frame => #4
            #3, #4 -> WithLatestFrom
            -> MemberSelector(Selector=Item2) => #6
            SubscribeSubject MiniscopeLog => #7
            SubscribeSubject FileName
            -> PropertyMapping(DataPath) => #9
            #6, #7, #9 -> OpenEphys.MiniscopeV4.Gui.SaveScreenshot
    -> GroupWorkflow Console
        WorkflowInput Source1 => #0
        SubscribeSubject MiniscopeLog => #1
        #0, #1 -> OpenEphys.MiniscopeV4.Gui.ConsolePanel
        -> WorkflowOutput
    -> MulticastSubject GuiLayout

    GroupWorkflow "Log Property Changes"
        ExternalizedMapping(DueTime) => #0
        -> GroupWorkflow Focus
            SubscribeSubject Focus => #0
            SubscribeSubject MiniscopeLog => #1
            ExternalizedMapping(DueTime) => #2
            #0, #1, #2 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0.05S, Format="Focus: {0}", Selector=it)
            -> WorkflowOutput
        #0 -> GroupWorkflow LedBrightness
            SubscribeSubject LedBrightness => #0
            SubscribeSubject MiniscopeLog => #1
            ExternalizedMapping(DueTime) => #2
            Source1=#0, Source3=#1, Source3=#2 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0.05S, Format="LED Brightness: {0}", Selector=it)
            -> WorkflowOutput

        GroupWorkflow FrameRate
            SubscribeSubject FrameRate => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0S, Format="Frame Rate: {0}", Selector=it)
            -> WorkflowOutput

        GroupWorkflow LedRespectsDigitalIn
            SubscribeSubject LedRespectsDigitalIn => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0S, Format="LED Respects Digital In: {0}", Selector=it)
            -> WorkflowOutput

        GroupWorkflow SensorGain
            SubscribeSubject SensorGain => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0S, Format="Sensor Gain: {0}", Selector=it)
            -> WorkflowOutput

        GroupWorkflow CommutatorEnableLed
            SubscribeSubject CommutatorEnableLed => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0S, Format="Commutator LED Enabled: {0}", Selector=it)
            -> WorkflowOutput

        GroupWorkflow CommutatorEnable
            SubscribeSubject CommutatorEnable => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0S, Format="Commutator Enabled: {0}", Selector=it)
            -> WorkflowOutput

        GroupWorkflow PortName
            SubscribeSubject PortName => #0
            SubscribeSubject MiniscopeLog => #1
            #0, #1 -> IncludeWorkflow(Path=LogProperty.bonsai, DueTime=PT0S, Format="COM Port: {0}", Selector=it)
            -> WorkflowOutput

GroupWorkflow "Save Data"
    SubscribeSubject RecordButton
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Condition "Miniscope Connected"
        SubscribeSubject MiniscopeConnected
        -> WorkflowOutput
    -> Condition "Manual Trigger" => #3
        SubscribeSubject TriggerMode
        -> BitwiseNot
        -> WorkflowOutput
    SubscribeSubject Frame
    -> MemberSelector(Selector=DigitalIn) => #5
    SubscribeSubject TriggerInput
    -> PropertyMapping(Value) => #7
    #5, #7 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0)) => #8
    SubscribeSubject RecordButton
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Condition "Miniscope Connected"
        SubscribeSubject MiniscopeConnected
        -> WorkflowOutput
    -> Condition "Triggered Mode" => #12
        SubscribeSubject TriggerMode
        -> WorkflowOutput
    #8, #12 -> WithLatestFrom
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it.Item1 && it.Item2
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1) => #16
    #3, #16 -> Merge
    -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
    -> PublishSubject GenerateFileNames
    -> Take(Count=1)
    -> MulticastSubject RecordingStatus
    -> StringProperty
    -> MulticastSubject RecordingError => #23
    SubscribeSubject FrameRate
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: Int32(it.ToString().Substring(3))
    -> PropertyMapping(FrameRate) => #26
    SubscribeSubject CompressVideo
    -> Bonsai.Scripting.Expressions.ExpressionTransform
      Expression: it ? "MJPG" : "Y800"
    -> PropertyMapping(FourCC) => #29
    SubscribeSubject GenerateFileNames => #30
    SubscribeSubject FileName
    -> PropertyMapping(FileName) => #32
    SubscribeSubject PathSuffix
    -> PropertyMapping(Suffix) => #34
    #30, #32, #34 -> OpenEphys.MiniscopeV4.Gui.GenerateRecordingFileNames(FileName="", Suffix=FileCount)
    -> GroupWorkflow "Log Recording Files" => #36
        WorkflowInput Source1 => #0
        -> WorkflowOutput
        #0 -> MemberSelector(Selector=ImageFileName)
        -> Format(Format="Saving image file: {0}") => #3
        #0 -> MemberSelector(Selector=LogFileName)
        -> Format(Format="Saving log file: {0}") => #5
        #0 -> MemberSelector(Selector=CsvFileName)
        -> Format(Format="Saving CSV file: {0}") => #7
        #3, #5, #7 -> Merge => #8
        SubscribeSubject MiniscopeLog => #9
        #8, #9 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogInfo
    -> MemberSelector(Selector=ImageFileName)
    -> PropertyMapping(ImageFileName) => #38
    #36 -> MemberSelector(Selector=CsvFileName)
    -> PropertyMapping(CsvFileName) => #40
    #36 -> MemberSelector(Selector=LogFileName)
    -> PropertyMapping(LogFileName) => #42
    #36 -> MemberSelector(Selector=ConfigFileName)
    -> PropertyMapping(ConfigFileName) => #44
    #23, #26, #29, #38, #40, #42, #44 -> SelectMany "Save Data"
        SubscribeSubject Frame => #0
        GroupWorkflow "Button Stop" => #1
            SubscribeSubject RecordButton
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> WorkflowOutput
        #0 -> GroupWorkflow "TriggerInput Stop" => #2
            WorkflowInput Source1
            -> MemberSelector(Selector=DigitalIn) => #1
            SubscribeSubject TriggerInput
            -> PropertyMapping(Value) => #3
            #1, #3 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0))
            -> BitwiseNot => #5
            SubscribeSubject TriggerMode => #6
            #5, #6 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform => #8
              Expression: it.Item1 && it.Item2
            SubscribeSubject RecordButton => #9
            #8, #9 -> WithLatestFrom
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: it.Item1 && it.Item2
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> WorkflowOutput
        GroupWorkflow "Record Duration Stop" => #3
            SubscribeSubject UseRecordDuration
            -> Condition True
                WorkflowInput Source1
                -> WorkflowOutput
            -> Condition "Manual Mode" => #2
                SubscribeSubject TriggerMode
                -> BitwiseNot
                -> WorkflowOutput
            SubscribeSubject RecordingDuration
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: TimeSpan.FromSeconds(it)
            -> PropertyMapping(DueTime) => #5
            #2, #5 -> Delay(DueTime=PT10M)
            -> WorkflowOutput
        GroupWorkflow "Disconnected Stop" => #4
            SubscribeSubject MiniscopeConnected
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> WorkflowOutput
        #1, #2, #3, #4 -> Merge
        -> Take(Count=1)
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordingStatus => #9
        #0, #9 -> TakeUntil => #10
        SubscribeSubject MiniscopeLog => #11
        ExternalizedMapping(FileName(DisplayName=LogFileName)) => #12
        #10, #11, #12 -> OpenEphys.MiniscopeV4.Gui.WriteLogsToFile(FileName="")
        -> WorkflowOutput
        #10 -> MemberSelector(Selector="FrameNumber,HardwareTime,Quaternion.X,Quaternion.Y,Quaternion.Z,Quaternion.W") => #15
        #10 -> MemberSelector(Selector=DigitalIn) => #16
        -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn0)) => #17
        #16 -> HasFlag(Operand=WorkflowProperty<OpenEphys.Miniscope.MiniscopeDaqDigitalIn>(Value=DigitalIn1)) => #18
        #15, #17, #18 -> Zip
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: new (it.Item1.Item1 as FrameNumber, it.Item1.Item2 as HardwareTime, it.Item1.Item3 as Quaternion_X, it.Item1.Item4 as Quaternion_Y, it.Item1.Item5 as Quaternion_Z, it.Item1.Item6 as Quaternion_W, it.Item2 as DigitalIn0, it.Item3 as DigitalIn1)
        -> Timestamp
        -> Bonsai.Scripting.Expressions.ExpressionTransform => #22
          Expression: new (it.Value.FrameNumber as FrameNumber, it.Value.HardwareTime as HardwareTime, it.Value.Quaternion_X as Quaternion_X, it.Value.Quaternion_Y as Quaternion_Y, it.Value.Quaternion_Z as Quaternion_Z, it.Value.Quaternion_W as Quaternion_W, it.Value.DigitalIn0 as DigitalIn0, it.Value.DigitalIn1 as DigitalIn1, it.Timestamp as Timestamp)
        ExternalizedMapping(FileName(DisplayName=CsvFileName)) => #23
        #22, #23 -> Bonsai.IO.CsvWriter(FileName="", Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)
        -> Materialize
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject RecordingError => #28
        -> Catch
        #10 -> MemberSelector(Selector=Image)
        -> Bonsai.Vision.Grayscale => #31
        ExternalizedMapping(FourCC, FrameRate, FileName(DisplayName=ImageFileName)) => #32
        #31, #32 -> Bonsai.Vision.VideoWriter(FileName="", Suffix=None, Buffered=true, Overwrite=false, FourCC=Y800, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)
        -> Materialize
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject RecordingError => #37
        #28, #37 -> Merge
        -> Take(Count=1)
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordingStatus
        #37 -> Catch
        #0 -> Take(Count=1) => #44
        GroupWorkflow Miniscope => #45
            SubscribeSubject LedBrightness => #0
            SubscribeSubject Focus => #1
            SubscribeSubject SensorGain => #2
            SubscribeSubject FrameRate => #3
            SubscribeSubject LedRespectsDigitalIn => #4
            #0, #1, #2, #3, #4 -> OpenEphys.MiniscopeV4.Gui.CreateMiniscopeSettings
            -> WorkflowOutput
        #44, #45 -> WithLatestFrom
        -> MemberSelector(Selector=Item2) => #47
        SubscribeSubject MiniscopeLog => #48
        #47, #48 -> WithLatestFrom => #49
        ExternalizedMapping(FileName(DisplayName=ConfigFileName)) => #50
        #49, #50 -> OpenEphys.MiniscopeV4.Gui.WriteSettingsToFile(FileName=C:\Users\brand\private\miniscope-data-testing\test_3.json)
    -> Repeat

    GroupWorkflow "Reset Button On Disconnect"
        SubscribeSubject MiniscopeConnected
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordButton

    GroupWorkflow "Reset Button for Duration"
        SubscribeSubject RecordingStatus
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> Condition TriggerModeIsManual
            SubscribeSubject TriggerMode
            -> BitwiseNot
            -> WorkflowOutput
        -> Condition RecordDurationIsTrue => #3
            SubscribeSubject UseRecordDuration
            -> WorkflowOutput
        -> Condition AutoRestartIsFalse
            SubscribeSubject AutomaticRestart
            -> BitwiseNot
            -> WorkflowOutput
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordButton
        #3 -> Condition AutoRestartIsTrue
            SubscribeSubject AutomaticRestart
            -> WorkflowOutput
        -> BooleanProperty(Value=true)
        -> PublishSubject AutoRestartTriggered

    GroupWorkflow "Reset Buttons On Error"
        SubscribeSubject RecordingError
        -> Condition => #1
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: !string.IsNullOrEmpty(it)
            -> WorkflowOutput
        SubscribeSubject MiniscopeStatus
        -> Condition => #3
            WorkflowInput Source1
            -> Bonsai.Scripting.Expressions.ExpressionTransform
              Expression: !string.IsNullOrEmpty(it)
            -> WorkflowOutput
        #1, #3 -> Merge
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> BooleanProperty(Value=false)
        -> MulticastSubject RecordButton
        -> WorkflowOutput

    GroupWorkflow "Log Recording End"
        SubscribeSubject RecordingStatus
        -> DistinctUntilChanged
        -> Skip(Count=1)
        -> Condition
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        -> StringProperty(Value="Stopping recording.") => #4
        SubscribeSubject MiniscopeLog => #5
        #4, #5 -> WithLatestFrom
        -> OpenEphys.MiniscopeV4.Gui.LogInfo

GroupWorkflow Commutator
    SubscribeSubject CommutatorConnected
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> Take(Count=1) => #2
    SubscribeSubject PortName
    -> PropertyMapping(PortName) => #4
    SubscribeSubject CommutatorEnable
    -> PropertyMapping(Enable) => #6
    SubscribeSubject CommutatorEnableLed
    -> PropertyMapping(EnableLed) => #8
    #2, #4, #6, #8 -> SelectMany
        SubscribeSubject Frame
        -> OpenEphys.MiniscopeV4.Gui.ObserveOnControl
        -> MemberSelector(Selector=Quaternion) => #2
        ExternalizedMapping(PortName, Enable, EnableLed) => #3
        #2, #3 -> IncludeWorkflow(Path=OpenEphys.Commutator:AutoCommutator.bonsai, PortName="", Enable=true, EnableLed=true) => #4
        SubscribeSubject CommutatorConnected
        -> Condition => #6
            WorkflowInput Source1
            -> BitwiseNot
            -> WorkflowOutput
        #4, #6 -> TakeUntil
        -> Materialize => #8
        -> Bonsai.Scripting.Expressions.ExpressionCondition
          Expression: it.Exception == null
        -> Dematerialize
        -> Catch
        -> WorkflowOutput
        #8 -> Bonsai.Scripting.Expressions.ExpressionCondition => #13
          Expression: it.Exception != null
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it.Exception.Message
        -> MulticastSubject CommutatorStatus
        #13 -> BooleanProperty(Value=false)
        -> MulticastSubject CommutatorConnected
    -> Repeat

GroupWorkflow "Log Errors"
    SubscribeSubject RecordingError => #0
    SubscribeSubject MiniscopeStatus => #1
    SubscribeSubject CommutatorStatus => #2
    #0, #1, #2 -> Merge => #3
    SubscribeSubject MiniscopeLog => #4
    #3, #4 -> WithLatestFrom
    -> OpenEphys.MiniscopeV4.Gui.LogError
